PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = white
  expName = Flanker
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Routines
  Routine trial
    ImageComponent arrow1
      image [set every repeat] = $arrow_1
      pos = (-0.12, 0)
      size = (0.030, 0.02)
      startVal [time (s)] = 0.0
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    ImageComponent arrow2
      image [set every repeat] = $arrow_2
      pos = (-0.08, 0)
      size = (0.030, 0.02)
      startVal [time (s)] = 0.0
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    ImageComponent arrow3
      image [set every repeat] = $arrow_3
      pos = (-0.04, 0)
      size = (0.030, 0.02)
      startVal [time (s)] = 0.0
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    ImageComponent target_t
      image [set every repeat] = $target
      size = (0.030, 0.02)
      startVal [time (s)] = 0.0
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    ImageComponent arrow5
      image [set every repeat] = $arrow_5
      pos = (0.04, 0)
      size = (0.030, 0.02)
      startVal [time (s)] = 0.0
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    ImageComponent arrow6
      image [set every repeat] = $arrow_6
      pos = (0.08, 0)
      size = (0.030, 0.02)
      startVal [time (s)] = 0.0
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    ImageComponent arrow7
      image [set every repeat] = $arrow_7
      pos = (0.12, 0)
      size = (0.030, 0.02)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'a', 'k'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code_7
      Code Type = Auto->JS
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      End Routine:
        if key_resp.corr:
            nCorr_exp = nCorr_exp + 1
  Routine fix
    PolygonComponent polygon
      durationEstim = 1
      fillColor = black
      lineColor = black
      shape = cross
      size = (20, 20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = pix
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  Routine Instr
    TextComponent instr_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Flanker deneyine hoşgeldiniz.

        Bu deneyde,
        Ortadaki okun yönünü belirlemeniz gerekecek.
        Diğer tüm okları yok saymaya çalışın.
        Ok solu gösteriyorsa A tuşuna basın.
        Ok sağı gösteriyorsa K tuşuna basın.
        Mümkün olduğunca hızlı ve doğru olmaya çalışın.

        Deneme turuna geçmek için BOŞLUK tuşuna basın.
    KeyboardComponent instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        win.mouseVisible = False
  Routine trial2
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import visual, event, core
        from psychopy.visual import ShapeStim
      Begin Routine:
        arrowVert = [(-0.4,0.05),(-0.4,-0.05),(-.2,-0.05),(-.2,-0.1),(0,0),(-.2,0.1),(-.2,0.05)]
        arrow = ShapeStim(win, vertices=arrowVert, fillColor='darkred', size=.5, lineColor='red')
    TextComponent text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $arrow
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  Routine FB
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        corr = []
        msg = ''
        msgColor = []
      Begin Routine:
        if key_resp_P.corr :
            msg = 'Doğru cevap'
            msgColor = 'green'
        else :
             msg = 'Yalnış cevap'
             msgColor = 'red'
    TextComponent text_2
      color [set every repeat] = $msgColor
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $msg
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  Routine FB2
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        msg_f = '\n\n {} adet doğru cevap verdiniz. \n Ortalama cevap süreniz {:.3}ms.' .format(nCorr_p,key_resp_P.rt*1000)
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $msg_f
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  Routine Practice
    ImageComponent arrow1_
      image [set every repeat] = $arrow_1
      pos = (-0.12, 0)
      size = (0.030, 0.02)
      startVal [time (s)] = 0.0
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    ImageComponent arrow2_
      image [set every repeat] = $arrow_2
      pos = (-0.08, 0)
      size = (0.030, 0.02)
      startVal [time (s)] = 0.0
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    ImageComponent arrow3_
      image [set every repeat] = $arrow_3
      pos = (-0.04, 0)
      size = (0.030, 0.02)
      startVal [time (s)] = 0.0
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    ImageComponent target_p
      image [set every repeat] = $target
      size = (0.030, 0.02)
      startVal [time (s)] = 0.0
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    ImageComponent arrow5_
      image [set every repeat] = $arrow_5
      pos = (0.04, 0)
      size = (0.030, 0.02)
      startVal [time (s)] = 0.0
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    ImageComponent arrow6_
      image [set every repeat] = $arrow_6
      pos = (0.08, 0)
      size = (0.030, 0.02)
      startVal [time (s)] = 0.0
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    ImageComponent arrow7_
      image [set every repeat] = $arrow_7
      pos = (0.12, 0)
      size = (0.030, 0.02)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_P
      allowedKeys = 'a','k'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Experiment:
        nCorr_p = 0
      End Routine:
        if key_resp_P.corr:
            nCorr_p = nCorr_p + 1
  Routine instr2
    TextComponent text_4
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Deneme bitmiştir.

        Deneye geçmek için HERHANGİ bir tuşa basınız.
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        msg_exp = ''
      Begin Routine:
        nCorr_exp = 0
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr3
    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        msg_exp = 'Biraz mola verebilirsiniz. \n\n {} adet doğru cevap verdiniz. \n Ortalama cevap süreniz {:.3}ms.\n\n Devam etmek için BOŞLUK tuşuna basınız.' .format(nCorr_exp,key_resp.rt*1000)
      End Routine:
        msg_exp = ''
    TextComponent text_5
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_exp
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine reset
    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Routine:
        nCorr_exp = 0
  Routine THX
    TextComponent text_6
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Flanker deneyinin sonuna geldiniz.

        Katılımınız için teşekkür ederiz.

        Deneyden çıkmak için BOŞLUK tuşuna basınız.
Flow
  Routine Instr
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = Flanker.xlsx
    loopType = fullRandom
    nReps = 4
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    conditions:
      [{'images': 'congruent-left.jpg', 'congruentcy': 1, 'corrAns': 's', 'arrow_1': 'left_arrow.png', 'arrow_2': 'left_arrow.png', 'arrow_3': 'left_arrow.png', 'target': 'left_arrow.png', 'arrow_5': 'left_arrow.png', 'arrow_6': 'left_arrow.png', 'arrow_7': 'left_arrow.png'},
      {'images': 'incongruent-left.jpg', 'congruentcy': 0, 'corrAns': 's', 'arrow_1': 'right_arrow.png', 'arrow_2': 'right_arrow.png', 'arrow_3': 'right_arrow.png', 'target': 'left_arrow.png', 'arrow_5': 'right_arrow.png', 'arrow_6': 'right_arrow.png', 'arrow_7': 'right_arrow.png'},
      {'images': 'congruent-right.jpg', 'congruentcy': 1, 'corrAns': 'l', 'arrow_1': 'right_arrow.png', 'arrow_2': 'right_arrow.png', 'arrow_3': 'right_arrow.png', 'target': 'right_arrow.png', 'arrow_5': 'right_arrow.png', 'arrow_6': 'right_arrow.png', 'arrow_7': 'right_arrow.png'},
      {'images': 'incongruent-right.jpg', 'congruentcy': 0, 'corrAns': 'l', 'arrow_1': 'left_arrow.png', 'arrow_2': 'left_arrow.png', 'arrow_3': 'left_arrow.png', 'target': 'right_arrow.png', 'arrow_5': 'left_arrow.png', 'arrow_6': 'left_arrow.png', 'arrow_7': 'left_arrow.png'},
      {'images': 'neutral left', 'congruentcy': 0, 'corrAns': 's', 'arrow_1': 'neutral.png', 'arrow_2': 'neutral.png', 'arrow_3': 'neutral.png', 'target': 'left_arrow.png', 'arrow_5': 'neutral.png', 'arrow_6': 'neutral.png', 'arrow_7': 'neutral.png'}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
    Routine fix
    Routine Practice
    Routine FB
  LoopTerminator practice
  Routine FB2
  Routine instr2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Flanker.xlsx
    loopType = fullRandom
    nReps = 8
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    conditions:
      [{'images': 'congruent-left.jpg', 'congruentcy': 1, 'corrAns': 's', 'arrow_1': 'left_arrow.png', 'arrow_2': 'left_arrow.png', 'arrow_3': 'left_arrow.png', 'target': 'left_arrow.png', 'arrow_5': 'left_arrow.png', 'arrow_6': 'left_arrow.png', 'arrow_7': 'left_arrow.png'},
      {'images': 'incongruent-left.jpg', 'congruentcy': 0, 'corrAns': 's', 'arrow_1': 'right_arrow.png', 'arrow_2': 'right_arrow.png', 'arrow_3': 'right_arrow.png', 'target': 'left_arrow.png', 'arrow_5': 'right_arrow.png', 'arrow_6': 'right_arrow.png', 'arrow_7': 'right_arrow.png'},
      {'images': 'congruent-right.jpg', 'congruentcy': 1, 'corrAns': 'l', 'arrow_1': 'right_arrow.png', 'arrow_2': 'right_arrow.png', 'arrow_3': 'right_arrow.png', 'target': 'right_arrow.png', 'arrow_5': 'right_arrow.png', 'arrow_6': 'right_arrow.png', 'arrow_7': 'right_arrow.png'},
      {'images': 'incongruent-right.jpg', 'congruentcy': 0, 'corrAns': 'l', 'arrow_1': 'left_arrow.png', 'arrow_2': 'left_arrow.png', 'arrow_3': 'left_arrow.png', 'target': 'right_arrow.png', 'arrow_5': 'left_arrow.png', 'arrow_6': 'left_arrow.png', 'arrow_7': 'left_arrow.png'},
      {'images': 'neutral left', 'congruentcy': 0, 'corrAns': 's', 'arrow_1': 'neutral.png', 'arrow_2': 'neutral.png', 'arrow_3': 'neutral.png', 'target': 'left_arrow.png', 'arrow_5': 'neutral.png', 'arrow_6': 'neutral.png', 'arrow_7': 'neutral.png'}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
    Routine fix
    Routine trial
  LoopTerminator trials
  Routine instr3
  Routine reset
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = Flanker.xlsx
    loopType = fullRandom
    nReps = 8
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    conditions:
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    Routine fix
    Routine trial
  LoopTerminator trials_2
  Routine instr3
  Routine reset
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = Flanker.xlsx
    loopType = fullRandom
    nReps = 8
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    conditions:
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    Routine fix
    Routine trial
  LoopTerminator trials_3
  Routine instr3
  Routine THX
